//==========================================================================
// SET_RIG.PRO
//   Description: Setup All RIG ids for tempo.
//                Each rig [NAME]_ID must have an accompanying
//                RIG/[NAME].PRO that [re]defines vars in given task for
//                example VAR_RIG.PRO.  Try not to add extra *global* declares,
//                instead add them to appropriate VAR_[RIG].PRO.
//
//   NOTE:
//       Create RIG/[name].PRO with process RIG_[name]() file for each rig used.  Define
//       parameters as needed for that rig
//   Author: chenchal.subraveti@vanderbilt.edu
//   Date: 2019-01-21
//==========================================================================
//  Revision History:

// Setup all Variables, SET_VARS depends on SET_SCRN.PRO
#include C:/TEMPO/ProcLib/VAR/SET_VARS.PRO
// Screen parameters
#include C:/TEMPO/ProcLib/RIG/SET_SCRN.PRO
// Set palatte colors and color indices
#include C:/TEMPO/ProcLib/RIG/SET_CLRS.PRO
// Send event processes
#include C:/TEMPO/ProcLib/UTIL/SEND_EVT.PRO


// Rig 029
#include C:/ProcLib/RIG/RIG_029.PRO


declare int RIG_ID;
declare int RIG_029_ID = 29;

declare SET_RIG(int rigId);

process SET_MONK(int rigId)
{
  RIG_ID = rigId;
  if (RIG_ID == RIG_029_ID)
  {
    spawnwait RIG_029();
  }
}
