//==========================================================================
// JITTER.PRO
//   Description: Create an instance of a different distributions.
//                The computed value is written to a global variable JITTER_INT.
//
//   Inputs:
//          GAUSS_JITTER(int meanT, float varianceT):
//          UNIFORM_JITTER(int meanT, int diffT);:
//          EXPONENT_JITTER(int meanT, int diffT);:
//   Output:
//         Global variable: JITTER_INT (int)
//
//   Usage:
//                spawnwait GAUSS_JITTER(600,15);
//                valueNeeded = JITTER_INT;
//
//   Author: chenchal.subraveti@vanderbilt.edu
//   Date: 2019-03-05
//==========================================================================

declare GAUSS_JITTER(int meanT, int varianceT);
declare UNIFORM_JITTER(int meanT, int diffT);
declare EXPONENT_JITTER(int meanT, int diffT);

declare constant int JITTER_NONE             = 0;
declare constant int JITTER_GAUSS_FLAG       = 1;
declare constant int JITTER_UNIFORM_FLAG     = 2;
declare constant int JITTER_EXPONENTIAL_FLAG = 3;

declare int          JITTER_INT;


process JITTER(int meanT, int varianceT, int jitterFlag)
{

    if (jitterFlag == JITTER_NONE)
    {
      JITTER_INT = meanT;
    }
    else if (jitterFlag == JITTER_GAUSS_FLAG)
    {
      spawnwait GAUSS_JITTER(meanT,  varianceT);
    }
    else if (jitterFlag == JITTER_UNIFORM_FLAG)
    {
      spawnwait UNIFORM_JITTER(meanT,  varianceT);
    }
    else if (jitterFlag == JITTER_EXPONENTIAL_FLAG)
    {
      spawnwait EXPONENT_JITTER(meanT,  varianceT);
    }
}


// Gaussian distribution
process GAUSS_JITTER(int meanT, int varianceT)
{
    // Box-Muller transform
    //Using: https://en.wikipedia.org/wiki/Box%E2%80%93Muller_transform
    declare float u1, u2, z1, tol;
    declare float twoPi = 2.0 * 22 / 7;

    // uniform random number (0 < u1 < 1)
    u1 = (random(65535) + 1.0) / 65536.0;
    u2 = (random(65535) + 1.0) / 65536.0;

    z1 = sqrt(-2.0 * ln(u1)) * cosrad(u2 * twoPi);
    //z1 = sqrt(-2.0 * ln(u1)) * sinrad(u2 * twoPi);

    JITTER_INT = round(z1 * sqrt(varianceT)) + meanT;
}


// Random uniform distribution
process UNIFORM_JITTER(int meanT, int diffT)
{
    if (random(2) > 0)
    {
        JITTER_INT = meanT + random(ceil(diffT / 2));
    }
    else
    {
        JITTER_INT = meanT - random(ceil(diffT / 2));
    }
}


// Exponential distribution
process EXPONENT_JITTER(int meanT, int diffT)
{
    declare float jitter;

    jitter     = (random(1001)) / 1000.0;
    jitter     = exp(-1.0 * jitter / 0.25);
    JITTER_INT = round(jitter * diffT + meanT);
}
